CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:Red
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Green
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch03")
    Name to assign these images:DAPI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:OrigTUJ
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DAPI
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:OrigDAPI
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
ColorToGray:[module_num:6|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
    Select the input image:Red
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:No
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    Convert blue to gray?:No
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
ColorToGray:[module_num:7|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
    Select the input image:Green
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:OrigDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,4000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:OrigRed
    Name the output image:FilteredRNA_Red
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:OrigGreen
    Name the output image:FilteredRNA_Green
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:OrigTUJ
    Name the output image:FilteredRNA_TUJ
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
Threshold:[module_num:12|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enabled:False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
    Select the input image:FilteredRNA_Red
    Name the output image:RedThreshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.2
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
Threshold:[module_num:13|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enabled:False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
    Select the input image:FilteredRNA_Green
    Name the output image:GreenThreshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.09
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
Threshold:[module_num:14|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enabled:False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
    Select the input image:FilteredRNA_TUJ
    Name the output image:TUJThreshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.2
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:FilteredRNA_Red
    Name the primary objects to be identified:RNA_Red
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.2
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:FilteredRNA_Green
    Name the primary objects to be identified:RNA_Green
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.09
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:FilteredRNA_TUJ
    Name the primary objects to be identified:RNA_TUJ
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.2
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
RelateObjects:[module_num:18|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notes:['Relating colocalization of DAPI to red RNA']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
    Parent objects:Nuclei
    Child objects:RNA_Red
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RedWithinDAPI
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
RelateObjects:[module_num:19|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
    Parent objects:Nuclei
    Child objects:RNA_TUJ
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:TUJWithinDAPI
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
RelateObjects:[module_num:20|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notes:['Relating colocalization of DAPI and green RNA']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
    Parent objects:Nuclei
    Child objects:RNA_Green
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:GreenWithinDAPI
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
RelateObjects:[module_num:21|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notes:['colocalization', 'Red to Green ']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
    Parent objects:RedWithinDAPI
    Child objects:GreenWithinDAPI
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RedGreenColocal
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
RelateObjects:[module_num:22|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notes:['Colocalization ', 'Red to TUJ']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
    Parent objects:RedWithinDAPI
    Child objects:TUJWithinDAPI
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RedTUJColocal
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
RelateObjects:[module_num:23|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notes:['colocalization ', 'TUJ to Green']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
    Parent objects:GreenWithinDAPI
    Child objects:TUJWithinDAPI
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:GreenTUJColocal
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
ClassifyObjects:[module_num:24|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Children_RNA_Red_Count
    Select bin spacing:Custom-defined bins
    Number of bins:2
    Lower threshold:0.5
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:not_colocalized, colocalized
    Retain an image of the classified objects?:Yes
    Name the output image:RedDapiColocal
    Select the object name:RNA_Red
    Select the first measurement:Children
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
ClassifyObjects:[module_num:25|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Children_RNA_Green_Count
    Select bin spacing:Custom-defined bins
    Number of bins:2
    Lower threshold:0.5
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:not_colocalized, colocalized
    Retain an image of the classified objects?:Yes
    Name the output image:GreenDapiColocal
    Select the object name:RNA_Red
    Select the first measurement:Children
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
ClassifyObjects:[module_num:26|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:RedWithinDAPI
    Select the measurement to classify by:Children_GreenWithinDAPI_Count
    Select bin spacing:Custom-defined bins
    Number of bins:1
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:not_colocalized, colocalized
    Retain an image of the classified objects?:Yes
    Name the output image:RedGreenColocal
    Select the object name:RNA_Red
    Select the first measurement:Children
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
ClassifyObjects:[module_num:27|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:RedWithinDAPI
    Select the measurement to classify by:Children_TUJWithinDAPI_Count
    Select bin spacing:Custom-defined bins
    Number of bins:1
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:not_colocalized, colocalized
    Retain an image of the classified objects?:Yes
    Name the output image:RedTUJColocal
    Select the object name:RNA_Red
    Select the first measurement:Children
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
ClassifyObjects:[module_num:28|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:GreenWithinDAPI
    Select the measurement to classify by:Children_TUJWithinDAPI_Count
    Select bin spacing:Custom-defined bins
    Number of bins:1
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:not_colocalized, colocalized
    Retain an image of the classified objects?:Yes
    Name the output image:GreenTUJColocal
    Select the object name:RNA_Red
    Select the first measurement:Children
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
FilterObjects:[module_num:29|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enabled:False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
    Select the objects to filter:RedWithinDAPI
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_GreenWithinDAPI_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:30|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enabled:False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
    Select objects to be masked:RNA_Red
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

SaveImages:[module_num:31|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:RedGreenColocal
    Select method for constructing file names:From image filename
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:32|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:RNAscope
    Overwrite existing files without warning?:No
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